<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Miniscope;assembly=OpenEphys.Miniscope"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UclaMiniscopeV4">
          <p1:Index>0</p1:Index>
          <p1:LedBrightness>0</p1:LedBrightness>
          <p1:Focus>0</p1:Focus>
          <p1:SensorGain>Low</p1:SensorGain>
          <p1:FramesPerSecond>Fps30</p1:FramesPerSecond>
          <p1:LedRespectsTrigger>false</p1:LedRespectsTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>uclaminiscopev4-image_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>GREY</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>FrameNumber,Quaternion</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>uclaminiscopev4-quart_.avi</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Item1,Value.Item2.W,Value.Item2.X,Value.Item2.Y,Value.Item2.Z</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>