<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Miniscope;assembly=OpenEphys.Miniscope"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UclaMiniscopeV4">
          <p1:Index>0</p1:Index>
          <p1:LedBrightness>0</p1:LedBrightness>
          <p1:Focus>0</p1:Focus>
          <p1:SensorGain>Low</p1:SensorGain>
          <p1:FramesPerSecond>Fps30</p1:FramesPerSecond>
          <p1:LedRespectsDigitalIn>None</p1:LedRespectsDigitalIn>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Uncompressed Video</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>uclaminiscopev4-image_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>Y800</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Losslessly Compresed Video</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:VideoWriter">
            <p2:FileName>uclaminiscopev4-image_.avi</p2:FileName>
            <p2:Suffix>None</p2:Suffix>
            <p2:Overwrite>false</p2:Overwrite>
            <p2:FrameRate>0</p2:FrameRate>
            <p2:OutputArguments>-c: ffv1 -pix_fmt gray -bits_per_raw_sample 8</p2:OutputArguments>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>FrameNumber,Quaternion</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>uclaminiscopev4-quat_.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp,Value.Item1,Value.Item2.W,Value.Item2.X,Value.Item2.Y,Value.Item2.Z</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>